<?
include_once ($template_directory . 'prepare_variables.php');
?> 

!-----------------------------
!First merge theia c3d and analog c3d
!-----------------------------
!=============================
!Open files
!=============================

Manage_Theia3D_Merge
/ROOT_FOLDER=<?=$working_directory;?> 
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! /TAGS=ACTION
/IMPORT_ANALOG_FILES=TRUE
! /MERGE_THEIA3D_FILES=FALSE
! /MERGE_THEIA3D_AND_OTHER_FILES=FALSE
/THEIA3D_SESSION_FOLDER=TheiaFormatData
/THEIA3D_FILE_MASK=*pose_subject.c3d
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/OTHER3D_SESSION_FOLDER=<?=$session["Filename"];?> 
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/SAVE_DEFAULT_CMZ_FILES=FALSE
! /OPEN_CMZ_LIBRARY=FALSE
/INPUT_FOLDER_STRUCTURE=QTM
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;

<?
foreach($measurements as $m) {
	if($m["Used"] === "True") {
?> 
		Assign_Tags_To_Files
		/MOTION_FILE_NAMES=*Dynamic*.c3d
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		/TAGS=<?=$m["Measurement_type"];?> 
		;

		Assign_Tags_To_Files
		/MOTION_FILE_NAMES=*Dynamic*.c3d
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		/TAGS=<?=$session['Test_condition'];?> 
		;

		Assign_Tags_To_Files
		/MOTION_FILE_NAMES=*Dynamic*.c3d
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		/TAGS=<?=$m['Comments'];?> 
		;

<?
	}
}?> 

Recalc
;

<?
include_once ($template_directory . 'markerless_model_calculations.v3s');
?> 

! Remove markerless static trial  to clean up the workspace
File_Close
/FILE_NAME=Static*.c3d
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;

! Assign tag to markerless trials
Assign_Tags_To_Files
/MOTION_FILE_NAMES=ALL_FILES
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/TAGS=markerless
;

!-----------------------------
! Now apply model on marker-based trials
!-----------------------------
<?
foreach($measurements as $m) {
	if(strstr($m["Used"], "True") and strstr($m["Measurement_type"], "Dynamic")) {
		$path_parts = pathinfo($m["Filename"]);
?> 
		File_Open
		/FILE_NAME=<?=$working_directory . $path_parts['filename'] . ".c3d";?> 
		/SUFFIX=_MB
		! /SET_PROMPT=File_Open
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		! /ON_FILE_NOT_FOUND=PROMPT
		;
<?
	}
	elseif(strstr($m["Used"], "True") and strstr($m["Measurement_type"], "Static")) {
		$path_parts = pathinfo($m["Filename"]);
		$markerbased_static_file = $working_directory . $path_parts['filename'] . ".c3d";
	}
}
?> 

! Assign tag to marker-based trials
Assign_Tags_To_Files
/MOTION_FILE_NAMES=*.c3d
/QUERY=NOT(markerless)
/TAGS=marker-based
;

! Apply model
Create_Hybrid_Model
/CALIBRATION_FILE=<?=$markerbased_static_file;?> 
! /SUFFIX=_
! /RANGE=ALL_FRAMES
! /SET_PROMPT=Open standing file
;

Assign_Model_File
/CALIBRATION_FILE=<?=$markerbased_static_file;?>
/MOTION_FILE_NAMES=marker-based
! /REMOVE_EXISTING_ASSIGNMENTS=FALSE
;

! Demo data uses sports marker set. Change .mdh file is other marker set is used
Apply_Model_Template
/CALIBRATION_FILE=<?=$markerbased_static_file;?>
/MODEL_TEMPLATE=<?=$template_directory;?>Full_body_Sports_Marker_Set.mdh
! /SET_PROMPT=Open model file
! /VIEW_BUILDMODEL_RESULTS=2
! /MISSING_TARGET_MESSAGE=FALSE
;

Set_Subject_Weight
/CALIBRATION_FILE=*Static*.c3d
/WEIGHT=<?=$session["Weight"]?> 
;

Set_Subject_Height
/CALIBRATION_FILE=*Static*.c3d
/HEIGHT=<?=$subject["Height"]?> 
;

<?
include_once ($template_directory . 'add_meta_data_to_report.v3s');
include_once ($template_directory . 'define_virtual_lab.v3s');
?> 


Call_Script
/SCRIPT_FILE_NAME=<?=$template_directory . 'processing_comparison.v3s'; ?> 
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;

!Save comparison cmz
File_Save_As
/FILE_NAME=<?=$working_directory . 'Report_comparison.cmz'; ?> 
;